---
API: 2.1
OpenSesame: 3.3.10
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "SlimStampen example"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Uni/UM/user-models-main/user-models-main/meta"
set disable_garbage_collection no
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background "#ffffff"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run slimstampen_setup always
	run new_inline_script always
	run instructions always
	run learning_session_setup always
	run while_there_is_time_left always
	run save_data always

define sketchpad instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Instructions go here. Press any key to begin." x=0 y=0 z_index=0

define inline_script learning_session_setup
	set description "Executes Python code"
	___run__
	# Start the clock
	var.session_start_time = clock.time()
	
	# Session will run until time_up == True
	var.time_up = False
	
	# Keep track of trial number
	var.trial_num = 1
	
	# Settings
	var.session_duration = 80000
	var.feedback_duration = 800
	var.inter_trial_interval = 200
	if var.scale == "green-red":
	    scale=all_scales[0]
	elif var.scale == "blue-red":
	    scale=all_scales[3]
	elif var.scale == "yellow-red":
	    scale=all_scales[4]
	print(scale)
	__end__
	___prepare__
	from colors import create_colors
	all_scales = create_colors.create_palettes()
	# scale1=["green","yellow","red"]
	# scale2=["blue","white","red"]
	# scale3=["yellow","white","red"]
	__end__

define inline_script new_inline_script
	set description "Executes Python code"
	___run__
	# Create a form
	form = Form(
	    cols=[1,2], rows=[1,1,1,1,1],
	    margins=(50,100,50,100), spacing=25
	)
	# Create four widgets
	# labelTitle = Label(text=u'Which of the below scales do you percieve to indicate a easy-hard scale?')
	labelQuestion = Label(
	    text=u'Which of the below paletes do you percieve to indicate a easy-hard scale?',
	    center=False
	)
	# buttonG = Button(text=u'green-red')
	# buttonY = Button(text=u'yellow-purple')
	# buttonR = Button(text=u'red-blue')
	check_br = Checkbox(text=u'blue-red', group=u'group', var=u'scale')
	check_gr = Checkbox(text=u'green-red', group=u'group', var=u'scale')
	check_yr = Checkbox(text=u'yellow-red', group=u'group', var=u'scale')
	image_br = ImageWidget(path=pool[u'img/blue_red.png'], adjust=True, frame=False)
	image_gr = ImageWidget(path=pool[u'img/green_red.png'], adjust=True, frame=False)
	image_yr = ImageWidget(path=pool[u'img/yellow_red.png'], adjust=True, frame=False)
	nextButton = Button(text='Next')
	# Add the widgets to the form. The position in the form is indicated as a
	# (column, row) tuple.
	# form.set_widget(labelTitle, (0,0), colspan=2)
	form.set_widget(labelQuestion, (0,0), colspan=2)
	# form.set_widget(buttonG, (0,2))
	form.set_widget(check_br, (0,1))
	form.set_widget(check_gr, (0,2))
	form.set_widget(check_yr, (0,3))
	form.set_widget(image_br, (1,1))
	form.set_widget(image_gr, (1,2))
	form.set_widget(image_yr, (1,3))
	form.set_widget(nextButton, (1,4))
	# form.set_widget(image_button2, (1,2))
	# form.set_widget(image_button3, (2,2))
	# Execute the form! In this case, the form will return the text of the button that
	# was clicked. This is one way to get a return value out of the form. Another way
	# is to use the 'var' keyword, supported some of the widgets.
	button_clicked = form._exec()
	__end__
	set _prepare ""

define inline_script present_trial
	set description "Executes Python code"
	___run__
	trial_start_time = clock.time()
	
	# Get next fact from the model
	next_fact, new = m.get_next_fact(current_time = trial_start_time)
	prompt = next_fact.question
	answer = next_fact.answer
	rof = m.get_rate_of_forgetting(trial_start_time+1,next_fact)
	#rof = m.get_previous_fact_alpha(next_fact)
	print(rof)
	col = map_colour(rof)
	# Show prompt
	my_canvas = Canvas()
	my_canvas.rect(-512,-384,1024,768,fill=True,color=col)
	my_canvas.rect(-150,-50,300,150,fill=True, color='white')
	my_canvas.text(prompt, font_size = 30)
	if new:
		my_canvas.text(answer, y = 50, font_size = 20)
	my_canvas.prepare()
	my_canvas.show()
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	
	# Keep listening for key presses until the user presses Enter
	while True:
		key, time = my_keyboard.get_key()
		
		# The first keypress determines the response time
		if keyboard_response == "" and not erased_answer:
			rt = clock.time() - trial_start_time
		
		if key == "return":
			break
			
		if key == "backspace":
			keyboard_response = keyboard_response[:-1]
			# If the answer is completely erased, the RT is no longer informative
			if keyboard_response == "":
				erased_answer = True
				rt = float("inf")
		
		elif key == "space":
			keyboard_response += " "
		
		else:
			keyboard_response += my_keyboard.to_chr(key)
	
		# Update what's on screen'
		my_canvas.clear()
		my_canvas.rect(-512,-384,1024,768,fill=True,color=col)
		my_canvas.rect(-150,-50,300,150,fill=True, color='white')
		my_canvas.text(prompt, font_size = 30)
		if new:
			my_canvas.text(answer, y = 50, font_size = 20)
		my_canvas.text(keyboard_response, y = 100)
		my_canvas.prepare()
		my_canvas.show()
	
	
	# Check if the response is correct
	correct = keyboard_response == answer
	
	# Log response
	response = Response(next_fact, trial_start_time, rt, correct)
	m.register_response(response) 
	
	# Show feedback
	feedback_color = "green" if correct else "red"
	my_canvas.text(keyboard_response, y = 100, color = feedback_color)
	if not correct:
		my_canvas.text(answer, y = 150)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.feedback_duration)
	
	# Clear the screen between trials
	my_canvas.clear()
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.inter_trial_interval)
	
	# Check if time is up
	if clock.time() - var.session_start_time >= var.session_duration:
		var.time_up = True
		
	# Increment trial number
	var.trial_num += 1
	__end__
	___prepare__
	def map_colour(rof):
	    max_rof = 0.5
	    min_rof = 0.1
	    col_count = len(scale)
	    clamped_rof = max(min(max_rof, rof), min_rof)
        col_index = int((((clamped_rof - min_rof) * col_count) / (max_rof - min_rof)))
        color = scale[col_index]
        return f"rgb({color[0]},{color[1]},{color[2]})"
	    #if rof == 0.3:
	    #col=scale[1]
	    #if rof < 0.3:
	        #col=scale[0]
	    #elif rof > 0.3:
	        #col=scale[2]
	    #return col
	__end__

define inline_script save_data
	set description "Executes Python code"
	___run__
	# Write the SlimStampen data to the OpenSesame log file
	dat = m.export_data()
	log.write(dat)
	__end__
	set _prepare ""

define inline_script slimstampen_setup
	set description "Executes Python code"
	___run__
	m = SpacingModel()
	
	# Add some study facts to the model (you could also read them from a CSV file)
	facts = [Fact(1,"dog","mbwa",0.55),
			Fact(2,"pearl","lulu",0.51),
			Fact(3,"cloud","wingu",0.42),
			Fact(4,"economy","iktisadi",0.38),
			Fact(5,"knee","goti",0.36),
			Fact(6,"egg","yai",0.36),
			Fact(7,"beer","pombe",0.32),
			Fact(8,"mattress","godoro",0.31),
			Fact(9,"broom","fagio",0.28),
			Fact(10,"doctor","tabibu",0.27),
			Fact(11,"maggot","buu",0.26),
			Fact(12,"bucket","ndoo",0.26),
			Fact(13,"tomato","nyanya",0.26),
			Fact(14,"poison","sumu",0.26),
			Fact(15,"soul","roho",0.24),
			Fact(16,"food","chakula",0.23),
			Fact(17,"crab","kaa",0.22),
			Fact(18,"corpse","maiti",0.22),
			Fact(19,"horse","farasi",0.21),
			Fact(20,"scarf","leso",0.21),
			Fact(21,"silk","hariri",0.2),
			Fact(22,"queen","malkia",0.2),
			Fact(23,"ornament","rembo",0.2),
			Fact(24,"carpet","zulia",0.2),
			Fact(25,"barrel","pipa",0.19),
			Fact(26,"rumor","fununu",0.18),
			Fact(27,"curtain","pazia",0.18),
			Fact(28,"snow","theluji",0.18),
			Fact(29,"monkey","tumbili",0.18),
			Fact(30,"steam","vuke",0.18),
			Fact(31,"leisure","wasaa",0.18),
			Fact(32,"grave","kaburi",0.17),
			Fact(33,"friend","rafiki",0.17),
			Fact(34,"prayer","sala",0.17),
			Fact(35,"shorts","kaputula",0.15),
			Fact(36,"boat","mashua",0.15),
			Fact(37,"donkey","punda",0.15),
			Fact(38,"sleep","usingizi",0.15),
			Fact(39,"lake","ziwa",0.15),
			Fact(40,"science","elimu",0.14),
			Fact(41,"olives","zeituni",0.14),
			Fact(42,"honor","adhama",0.13),
			Fact(43,"enemy","adui",0.13),
			Fact(44,"garden","bustani",0.13),
			Fact(45,"treasure","dafina",0.13),
			Fact(46,"mango","embe",0.13),
			Fact(47,"prophet","nabii",0.13),
			Fact(48,"lung","pafu",0.13),
			Fact(49,"cotton","pamba",0.13),
			Fact(50,"manure","samadi",0.13),
			Fact(51,"sailor","baharia",0.11),
			Fact(52,"society","chama",0.11),
			Fact(53,"leaf","jani",0.11),
			Fact(54,"frog","chura",0.1),
			Fact(55,"almond","lozi",0.1),
			Fact(56,"yoke","nira",0.1),
			Fact(57,"agent","wakili",0.1),
			Fact(58,"orphan","yatima",0.1),
			Fact(59,"envelope","bahasha",0.09),
			Fact(60,"oyster","chaza",0.09),
			Fact(61,"mystery","fumbo",0.09),
			Fact(62,"yeast","hamira",0.09),
			Fact(63,"dust","vumbi",0.09),
			Fact(64,"glue","ambo",0.08),
			Fact(65,"harbor","bandari",0.08),
			Fact(66,"cinnamon","dalasini",0.08),
			Fact(67,"spite","inda",0.08),
			Fact(68,"wound","jeraha",0.08),
			Fact(69,"gate","lango",0.08),
			Fact(70,"anchor","nanga",0.08),
			Fact(71,"forehead","paji",0.08),
			Fact(72,"grapes","zabibu",0.08),
			Fact(73,"custom","desturi",0.07),
			Fact(74,"wheel","duara",0.07),
			Fact(75,"trench","handaki",0.07),
			Fact(76,"kiln","joko",0.07),
			Fact(77,"bone","mfupa",0.07),
			Fact(78,"plate","sahani",0.07),
			Fact(79,"shroud","sanda",0.07),
			Fact(80,"poem","utenzi",0.07),
			Fact(81,"trouble","adha",0.06),
			Fact(82,"cheese","jibini",0.06),
			Fact(83,"parrot","kasuku",0.06),
			Fact(84,"bribe","rushwa",0.06),
			Fact(85,"merchant","tajiri",0.06),
			Fact(86,"divorce","talaka",0.06),
			Fact(87,"oath","yamini",0.06),
			Fact(88,"invoice","ankra",0.04),
			Fact(89,"quarry","chimbo",0.04),
			Fact(90,"flood","gharika",0.04),
			Fact(91,"stump","gutu",0.04),
			Fact(92,"story","hadithi",0.04),
			Fact(93,"rope","kamba",0.04),
			Fact(94,"blame","lawama",0.04),
			Fact(95,"corn","nafaka",0.04),
			Fact(96,"bull","fahali",0.03),
			Fact(97,"tailor","mshoni",0.03),
			Fact(98,"leech","ruba",0.03),
			Fact(99,"flavor","ladha",0.02),
			Fact(100,"forgery","ubini",0),]
	
	for fact in facts:
		m.add_fact(fact)
	__end__
	___prepare__
	from __future__ import division
	import math
	import pandas as pd
	from collections import namedtuple
	
	Fact = namedtuple("Fact", "fact_id, question, answer,priora")
	Response = namedtuple("Response", "fact, start_time,rt,correct")
	#Lateresponse = namedtuple("Lateresponse","rt, correct")
	Encounter = namedtuple("Encounter", "activation, time, reaction_time, decay")
	
	
	class SpacingModel(object):
	
	    # Model constants
	    LOOKAHEAD_TIME = 15000
	    FORGET_THRESHOLD = -0.8
	    DEFAULT_ALPHA = 0.3
	    C = 0.25
	    F = 1.0
	
	    def __init__(self):
	        self.facts = []
	        self.responses = []
	        #self.lateresponse = []
	        
	    def get_previous_fact_alpha(self,fact):
	        prev = None
	        for resp in reversed(self.responses):
	            if resp.fact.fact_id == fact.fact_id:
	                prev = resp
	                print(prev.start_time)
	                break
	        if prev == None:
	            return self.DEFAULT_ALPHA
	        return self.get_rate_of_forgetting(prev.start_time + 1, fact)
	        
	        
	    def add_fact(self, fact):
	        # type: (Fact) -> None
	        """
	        Add a fact to the list of study items.
	        """
	        # Ensure that a fact with this ID does not exist already
	        if next((f for f in self.facts if f.fact_id == fact.fact_id), None):
	            raise RuntimeError(
	                "Error while adding fact: There is already a fact with the same ID: {}. Each fact must have a unique ID".format(fact.fact_id))
	
	        self.facts.append(fact)
	
	
	    def register_response(self, response):
	        # type: (Response) -> None
	        """
	        Register a response.
	        """
	        # Prevent duplicate responses
	        if next((r for r in self.responses if r.start_time == response.start_time), None):
	            raise RuntimeError(
	                "Error while registering response: A response has already been logged at this start_time: {}. Each response must occur at a unique start_time.".format(response.start_time))
	
	        self.responses.append(response)
	
	
	    def get_next_fact(self, current_time):
	        # type: (int) -> (Fact, bool)
	        """
	        Returns a tuple containing the fact that needs to be repeated most urgently and a boolean indicating whether this fact is new (True) or has been presented before (False).
	        If none of the previously studied facts needs to be repeated right now, return a new fact instead.
	        """
	        # Calculate all fact activations in the near future
	        fact_activations = [(f, self.calculate_activation(current_time + self.LOOKAHEAD_TIME, f)) for f in self.facts]
	
	        seen_facts = [(f, a) for (f, a) in fact_activations if a > -float("inf")]
	        not_seen_facts = [(f, a) for (f, a) in fact_activations if a == -float("inf")]
	
	        # Prevent an immediate repetition of the same fact
	        if len(seen_facts) > 2:
	            last_response = self.responses[-1]
	            seen_facts = [(f, a) for (f, a) in seen_facts if f.fact_id != last_response.fact.fact_id]
	
	        # Reinforce the weakest fact with an activation below the threshold
	        seen_facts_below_threshold = [(f, a) for (f, a) in seen_facts if a < self.FORGET_THRESHOLD]
	        if len(not_seen_facts) == 0 or len(seen_facts_below_threshold) > 0:
	            weakest_fact = min(seen_facts, key = lambda t: t[1])
	            return((weakest_fact[0], False))
	
	        # If none of the previously seen facts has an activation below the threshold, return a new fact
	        return((not_seen_facts[0][0], True))
	
	
	    def get_rate_of_forgetting(self, time, fact):
	        # type: (int, Fact) -> float
	        """
	        Return the estimated rate of forgetting of the fact at the specified time
	        """
	        encounters = []
	
	        responses_for_fact = [r for r in self.responses if r.fact.fact_id == fact.fact_id and r.start_time < time]
	        #alpha = self.DEFAULT_ALPHA
	        alpha = fact.priora
	        # Calculate the activation by running through the sequence of previous responses
	        for response in responses_for_fact:
	            activation = self.calculate_activation_from_encounters(encounters, response.start_time)
	            encounters.append(Encounter(activation, response.start_time, self.normalise_reaction_time(response), self.DEFAULT_ALPHA))
	            #alpha = response.fact.priora
	            alpha = self.estimate_alpha(encounters, activation, response, alpha)
	
	            # Update decay estimates of previous encounters
	            encounters = [encounter._replace(decay = self.calculate_decay(encounter.activation, alpha)) for encounter in encounters]
	
	        return(alpha)
	
	
	    def calculate_activation(self, time, fact):
	        # type: (int, Fact) -> float
	        """
	        Calculate the activation of a fact at the given time.
	        """
	
	        encounters = []
	
	        responses_for_fact = [r for r in self.responses if r.fact.fact_id == fact.fact_id and r.start_time < time]
	        alpha = self.DEFAULT_ALPHA
	
	        # Calculate the activation by running through the sequence of previous responses
	        for response in responses_for_fact:
	            activation = self.calculate_activation_from_encounters(encounters, response.start_time)
	            encounters.append(Encounter(activation, response.start_time, self.normalise_reaction_time(response), self.DEFAULT_ALPHA))
	            alpha = self.estimate_alpha(encounters, activation, response, alpha)
	
	            # Update decay estimates of previous encounters
	            encounters = [encounter._replace(decay = self.calculate_decay(encounter.activation, alpha)) for encounter in encounters]
	
	        return(self.calculate_activation_from_encounters(encounters, time))
	
	
	    def calculate_decay(self, activation, alpha):
	        # type: (float, float) -> float
	        """
	        Calculate activation-dependent decay
	        """
	        return self.C * math.exp(activation) + alpha
	
	
	    def estimate_alpha(self, encounters, activation, response, previous_alpha):
	        # type: ([Encounter], float, Response, float) -> float
	        """
	        Estimate the rate of forgetting parameter (alpha) for an item.
	        """
	        if len(encounters) < 2:
	            #return(self.DEFAULT_ALPHA)
	            #return previous_alpha
	            return response.fact.priora
	
	        a_fit = previous_alpha
	        reading_time = self.get_reading_time(response.fact.question)
	        estimated_rt = self.estimate_reaction_time_from_activation(activation, reading_time)
	        est_diff = estimated_rt - self.normalise_reaction_time(response)
	
	        if est_diff < 0:
	            # Estimated RT was too short (estimated activation too high), so actual decay was larger
	            a0 = a_fit
	            a1 = a_fit + 0.05
	        
	        else:
	            # Estimated RT was too long (estimated activation too low), so actual decay was smaller
	            a0 = a_fit - 0.05
	            a1 = a_fit
	
	        # Binary search between previous fit and proposed alpha
	        for _ in range(6):
	            # Adjust all decays to use the new alpha
	            a0_diff = a0 - a_fit
	            a1_diff = a1 - a_fit
	            d_a0 = [e._replace(decay = e.decay + a0_diff) for e in encounters]
	            d_a1 = [e._replace(decay = e.decay + a1_diff) for e in encounters]
	
	            # Calculate the reaction times from activation and compare against observed RTs
	            encounter_window = encounters[max(1, len(encounters) - 5):]
	            total_a0_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a0, reading_time)
	            total_a1_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a1, reading_time)
	
	            # Adjust the search area based on the lowest total error
	            ac = (a0 + a1) / 2
	            if total_a0_error < total_a1_error:
	                a1 = ac
	            else:
	                a0 = ac
	        
	        # The new alpha estimate is the average value in the remaining bracket
	        return((a0 + a1) / 2)
	
	
	    def calculate_activation_from_encounters(self, encounters, current_time):
	        # type: ([Encounter], int) -> float
	        included_encounters = [e for e in encounters if e.time < current_time]
	
	        if len(included_encounters) == 0:
	            return(-float("inf"))
	
	        return(math.log(sum([math.pow((current_time - e.time) / 1000, -e.decay) for e in included_encounters])))
	
	
	    def calculate_predicted_reaction_time_error(self, test_set, decay_adjusted_encounters, reading_time):
	        # type: ([Encounter], [Encounter], Fact) -> float
	        """
	        Calculate the summed absolute difference between observed response times and those predicted based on a decay adjustment.
	        """
	        activations = [self.calculate_activation_from_encounters(decay_adjusted_encounters, e.time - 100) for e in test_set]
	        rt = [self.estimate_reaction_time_from_activation(a, reading_time) for a in activations]
	        rt_errors = [abs(e.reaction_time - rt) for (e, rt) in zip(test_set, rt)]
	        return(sum(rt_errors))
	
	
	    def estimate_reaction_time_from_activation(self, activation, reading_time):
	        # type: (float, int) -> float
	        """
	        Calculate an estimated reaction time given a fact's activation and the expected reading time 
	        """
	        return((self.F * math.exp(-activation) + (reading_time / 1000)) * 1000)
	
	
	    def get_max_reaction_time_for_fact(self, fact):
	        # type: (Fact) -> float
	        """
	        Return the highest response time we can reasonably expect for a given fact
	        """
	        reading_time = self.get_reading_time(fact.question)
	        max_rt = 1.5 * self.estimate_reaction_time_from_activation(self.FORGET_THRESHOLD, reading_time)
	        return(max_rt)
	
	
	    def get_reading_time(self, text):
	        # type: (str) -> float
	        """
	        Return expected reading time in milliseconds for a given string
	        """
	        word_count = len(text.split())
	
	        if word_count > 1:
	            character_count = len(text)
	            return(max((-157.9 + character_count * 19.5), 300))
	        
	        return(300)
	
	    
	    def normalise_reaction_time(self, response):
	        # type: (Response) -> float
	        """
	        Cut off extremely long responses to keep the reaction time within reasonable bounds
	        """
	        rt = response.rt if response.correct else 60000
	        max_rt = self.get_max_reaction_time_for_fact(response.fact)
	        return(min(rt, max_rt))
	
	
	    def export_data(self, path = None):
	        # type: (str) -> DataFrame
	        """
	        Save the response data to the specified csv file, and return a copy of the pandas DataFrame.
	        If no path is specified, return a CSV-formatted copy of the data instead.
	        """
	
	        def calc_rof(row):
	            return(self.get_rate_of_forgetting(row["start_time"] + 1, row["fact"]))
	
	        dat_resp = pd.DataFrame(self.responses)
	        dat_facts = pd.DataFrame([r.fact for r in self.responses])
	        dat = pd.concat([dat_resp, dat_facts], axis = 1)
	
	        # Add column for rate of forgetting estimate after each observation
	        dat["alpha"] = dat.apply(calc_rof, axis = 1)
	        dat.drop("fact", inplace = True)
	        
	        # Add trial number column
	        dat.index.name = "trial"
	        dat.index = dat.index + 1
	
	        # Save to CSV file if a path was specified, otherwise return the CSV-formatted output
	        if path is not None:
	            dat.to_csv(path, encoding="UTF-8")
	            return(dat)
	        
	        return(dat.to_csv())
	__end__

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run present_trial always

define loop while_there_is_time_left
	set source table
	set repeat 1000
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[time_up] = yes"
	setcycle 0 ignore_this_variable 1
	run trial_sequence

